PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Save csv file = True
  Data filename = u'data/sub-{participant_label}/ses-{session_label}/beh/sub-{participant_label}_ses-{session_label}_task-assoc_events'.format(participant_label=expInfo['participant'], session_label=expInfo['session'])
  expName = assoc
  Screen = 1
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Routines
  Routine block_feedback
    CodeComponent compute_block_feedback
      Begin Routine:
        left_resp_perc_corr = assoc_trials.data['left_stim_resp.corr'].sum()/len(assoc_trials.data['left_stim_resp.corr'])
        right_resp_perc_corr = assoc_trials.data['right_stim_resp.corr'].sum()/len(assoc_trials.data['right_stim_resp.corr'])

        left_resp_mean_rt = assoc_trials.data['left_stim_resp.rt'].mean() * 1000
        right_resp_mean_rt = assoc_trials.data['right_stim_resp.rt'].mean() * 1000

        block_feedback_msg = """
            Block Complete

            Left Percent Correct  : {left_resp_acc}%
            Right Percent Correct : {right_resp_acc}%

            Left Mean RT  : {left_resp_rt} ms
            Right Mean RT : {right_resp_rt} ms

            Press Space to Continue
        """.format(left_resp_acc=left_resp_perc_corr,
                   right_resp_acc=right_resp_perc_corr,
                   left_resp_rt=left_resp_mean_rt,
                   right_resp_rt=right_resp_mean_rt)
    TextComponent block_feedback_text
      text [set every repeat] = $block_feedback_msg
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent block_continue_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine stimulus
    ImageComponent left_stim_img
      stopVal [duration (s)] = 2.0
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $left_stim
      size = (0.5, 0.5)
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    ImageComponent right_stim_img
      stopVal [duration (s)] = 2.0
      pos = (.3, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $right_stim
      size = (0.5, 0.5)
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    KeyboardComponent left_stim_resp
      correctAns = $left_stim_key
      storeCorrect = True
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'w','e','r'
      startVal [time (s)] = 0.0
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    KeyboardComponent right_stim_resp
      correctAns = $right_stim_key
      storeCorrect = True
      stopVal [duration (s)] = 2.0
      forceEndRoutine = False
      allowedKeys [set every repeat] = 'u','i','o'
      startVal [time (s)] = 0.0
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    StaticComponent inter_trial_interval
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 2.0
  Routine good_bye
    TextComponent good_bye_text
      text = The End
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine welcome
    TextComponent welcome_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to your experiment

        Type a key to continue...
    KeyboardComponent continue_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent fixation_text
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine get_ready
    TextComponent get_ready_text
      text = Get Ready
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial_feedback
    CodeComponent compute_trial_feedback
      Begin Routine:
        if left_stim_resp.corr == 1 and right_stim_resp.corr == 1:
            show_time = 0.0
        else:
            show_time = 1.0
    ImageComponent left_stim_img_ans
      stopVal [duration (s)] = $show_time
      pos = (-.3, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $left_stim
      size = (0.5, 0.5)
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    ImageComponent right_stim_img_ans
      stopVal [duration (s)] = $show_time
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $right_stim
      size = (0.5, 0.5)
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    ImageComponent left_stim_key_ans
      stopVal [duration (s)] = $show_time
      pos = (-0.3, -0.5)
      startVal [time (s)] = 0.0
      image [set every repeat] = $left_stim_key_img
      size = (0.4, 0.2)
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    ImageComponent right_stim_key_ans
      stopVal [duration (s)] = $show_time
      pos = (0.3, -0.5)
      startVal [time (s)] = 0.0
      image [set every repeat] = $right_stim_key_img
      size = (0.4, 0.2)
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  Routine instructions
    TextComponent instructions_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In this experiment you will be learning to make key presses based on pairs of stimuli.

        You will receive feedback after incorrect responses.

        Press any key to start
    KeyboardComponent start_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 14
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    Routine get_ready
    LoopInitiator assoc_trials loopType="TrialHandler"
      conditionsFile = config/trial_config.csv
      loopType = random
      nReps = 6
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      conditions:
        [{u'right_stim_key': u'i', u'left_stim_key': u'w', u'left_stim': u'stimuli/faces/neutral_y_f_4.bmp', u'right_stim_key_img': u'Middle.bmp', u'left_stim_key_img': u'stimuli/responses/Left.bmp', u'right_stim': u'neutral_o_f_3.bmp'},
        {u'right_stim_key': u'o', u'left_stim_key': u'e', u'left_stim': u'stimuli/faces/neutral_y_f_4.bmp', u'right_stim_key_img': u'Right.bmp', u'left_stim_key_img': u'stimuli/responses/Middle.bmp', u'right_stim': u'neutral_o_f_5.bmp'},
        {u'right_stim_key': u'u', u'left_stim_key': u'e', u'left_stim': u'stimuli/faces/neutral_y_f_16.bmp', u'right_stim_key_img': u'Left.bmp', u'left_stim_key_img': u'stimuli/responses/Middle.bmp', u'right_stim': u'neutral_o_f_3.bmp'},
        {u'right_stim_key': u'i', u'left_stim_key': u'r', u'left_stim': u'stimuli/faces/neutral_y_f_16.bmp', u'right_stim_key_img': u'Middle.bmp', u'left_stim_key_img': u'stimuli/responses/Right.bmp', u'right_stim': u'neutral_o_f_5.bmp'}]
      Routine fixation
      Routine stimulus
      Routine trial_feedback
    LoopTerminator assoc_trials
    Routine block_feedback
  LoopTerminator block
  Routine good_bye
